// "Batch RGB Merge for CYTO 2017 images"

// Opens multiple sets of three separate color channels as
// an RGB stack or converts them to RGB images. File names
// ending in "red.ti", "green.ti" and "blue.ti" are assumed to be red, green
// and blue channels respectively, but this can be changed in
// the dialog box.

// A sample image set, courtesy of Mikael Bjorklund, is available at:
//    http://rsb.info.nih.gov/ij/macros/images/DrosophilaCells.zip
// It consists of three images of Drosophila S2 cells,
// each with three channels (d0=blue, d1=red and d2=green  
// as indicated by the end of the filename. The staining is
// standard Hoechst, phalloidin, tubulin.

  Dialog.create("RGB Batch Convert");
  Dialog.addString("Red Suffix:", "red.ti");
  Dialog.addString("Green Suffix:", "green.ti");
  Dialog.addString("Blue Suffix:", "blue.ti");
  Dialog.addCheckbox("Open as Stack", true);
  Dialog.show();
  redSuffix = Dialog.getString() + ".";
  greenSuffix = Dialog.getString() + ".";
  blueSuffix = Dialog.getString() + ".";
  openAsStack = Dialog.getCheckbox();
  
  batchConvert();
  exit;
  


  function batchConvert() {
      dir1 = getDirectory("Choose Source Directory ");
      dir2 = getDirectory("Choose Destination Directory ");
      list = getFileList(dir1);
      setBatchMode(true);
      n = list.length;
      if ((n%3)!=0)
         exit("The number of files must be a multiple of 3");
      stack = 0;
      first = 0;
      for (i=0; i<n/3; i++) {
          showProgress(i+1, n/3);
          red="?"; green="?"; blue="?";
          for (j=first; j<first+3; j++) {
              if (indexOf(list[j], redSuffix)!=-1)
                  red = list[j];
              if (indexOf(list[j], greenSuffix)!=-1)
                  green = list[j];
              if (indexOf(list[j], blueSuffix)!=-1)
                  blue = list[j];
          }
          open(dir1 +red);
          open(dir1 +green);
          open(dir1 +blue);
          run("RGB Merge...", "red=["+red+"] green=["+green+"] blue=["+blue+"]");
          index = indexOf(red, redSuffix);
          name = substring(red, 0, index);
          saveAs("tiff", dir2+name);
          first += 3;
      }
  }
